WorkflowBuilder(Version=2.5.0)
Bonsai.Audio.CreateAudioContext
  DeviceName="Generic Software on Speakers (High Definition Audio Device)"
  SampleRate=44100
  Refresh=0
  Position(X=0, Y=0, Z=0)
  Velocity(X=0, Y=0, Z=0)
  Direction(X=-0, Y=-0, Z=-1)
  Up(X=0, Y=1, Z=0)
  Gain=1
-> Bonsai.Audio.AudioResources
  Buffers
    BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=Offer0, FileName=reward_prob_0.wav)
    BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=Paid, FileName=CHIME1.wav)
    BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=Offer0.2, FileName=reward_prob_0.2.wav)
    BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=Offer0.8, FileName=reward_prob_0.8.wav)
    BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=Offer1, FileName=reward_prob_1.wav)
    BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=Unpaid, FileName=eeeooop.wav)
  Sources
    SourceConfiguration(Name=Paid, BufferName=Paid, Direction(X=0, Y=0, Z=0), Position(X=0, Y=0, Z=0), Velocity(X=0, Y=0, Z=0), Looping=false, Relative=false, State=Initial)
    SourceConfiguration
      Name=Offer0
      BufferName=Offer0
      Direction(X=0, Y=0, Z=0)
      Position(X=0, Y=0, Z=0)
      Velocity(X=0, Y=0, Z=0)
      Looping=false
      Relative=false
      State=Initial
    SourceConfiguration
      Name=Offer0.2
      BufferName=Offer0.2
      Direction(X=0, Y=0, Z=0)
      Position(X=0, Y=0, Z=0)
      Velocity(X=0, Y=0, Z=0)
      Looping=false
      Relative=false
      State=Initial
    SourceConfiguration
      Name=Offer0.8
      BufferName=Offer0.8
      Direction(X=0, Y=0, Z=0)
      Position(X=0, Y=0, Z=0)
      Velocity(X=0, Y=0, Z=0)
      Looping=false
      Relative=false
      State=Initial
    SourceConfiguration
      Name=Offer1
      BufferName=Offer1
      Direction(X=0, Y=0, Z=0)
      Position(X=0, Y=0, Z=0)
      Velocity(X=0, Y=0, Z=0)
      Looping=false
      Relative=false
      State=Initial
    SourceConfiguration
      Name=Unpaid
      BufferName=Unpaid
      Direction(X=0, Y=0, Z=0)
      Position(X=0, Y=0, Z=0)
      Velocity(X=0, Y=0, Z=0)
      Looping=false
      Relative=false
      State=Initial
-> Bonsai.Resources.LoadResources

Bonsai.Arduino.CreateArduino(Name=Servo, PortName=COM4, BaudRate=57600, SamplingInterval=15)
Bonsai.Arduino.CreateArduino(Name="Pellet Dispenser", PortName=COM3, BaudRate=57600, SamplingInterval=25)

Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="") => #5
Bonsai.Video.VideoCaptureDevice(Index=2, CaptureProperties="") => #6
Bonsai.Video.VideoCaptureDevice(Index=3, CaptureProperties="") => #7
Bonsai.Video.VideoCaptureDevice(Index=1, CaptureProperties="") => #8
NestedWorkflow Press4toStart => #9
    Bonsai.Windows.Input.KeyDown(Filter=D4, SuppressRepetitions=true) => #0
    -> WorkflowOutput
    #0 -> IntProperty(Value=0) => #2
    -> Bonsai.Arduino.ServoOutput(PortName=Servo, Pin=2)
    #2 -> Bonsai.Arduino.ServoOutput(PortName=Servo, Pin=4)
    #2 -> Bonsai.Arduino.ServoOutput(PortName=Servo, Pin=8)
    #2 -> Bonsai.Arduino.ServoOutput(PortName=Servo, Pin=10)
#6, #9 -> SkipUntil => #10
-> NestedWorkflow "Mouse OfferZone 2"(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI") => #11
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions
        ArrayOfPoint
          Point(X=397, Y=257)
          Point(X=397, Y=188)
          Point(X=534, Y=187)
          Point(X=528, Y=236)
          Point(X=507, Y=233)
          Point(X=481, Y=234)
          Point(X=476, Y=246)
          Point(X=455, Y=244)
          Point(X=437, Y=250)
          Point(X=439, Y=405)
          Point(X=370, Y=405)
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=68, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity
      Regions
        ArrayOfPoint
          Point(X=28, Y=51)
          Point(X=27, Y=1)
          Point(X=75, Y=1)
          Point(X=99, Y=0)
          Point(X=164, Y=1)
          Point(X=161, Y=30)
          Point(X=158, Y=50)
          Point(X=143, Y=45)
          Point(X=127, Y=44)
          Point(X=116, Y=44)
          Point(X=110, Y=47)
          Point(X=105, Y=57)
          Point(X=90, Y=56)
          Point(X=84, Y=58)
          Point(X=67, Y=65)
          Point(X=67, Y=103)
          Point(X=70, Y=218)
          Point(X=1, Y=217)
      Operation=Avg
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=9)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> Condition => #12
    WorkflowInput Source1
    -> WorkflowOutput
-> Bonsai.Scripting.ExpressionTransform => #13
  Expression: 2
#12 -> PublishSubject Directional2
#11 -> PublishSubject OfferState2
#10 -> NestedWorkflow R2_TS_Entry(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI")
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=395, Y=253), Point(X=395, Y=241), Point(X=443, Y=241), Point(X=444, Y=252)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=87, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=0, Y=0), Point(X=49, Y=0), Point(X=49, Y=11), Point(X=23, Y=12), Point(X=0, Y=12))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=10)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> PublishSubject R2_TS_Entry
#10 -> NestedWorkflow R2_TS_Accept(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI")
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=438, Y=247), Point(X=438, Y=184), Point(X=452, Y=184), Point(X=452, Y=247)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=87, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=0, Y=0), Point(X=14, Y=0), Point(X=14, Y=63), Point(X=0, Y=63))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=10)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> PublishSubject R2_TS_Accept
#10 -> NestedWorkflow R2_TS_Leave(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI")
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=384, Y=250), Point(X=384, Y=185), Point(X=395, Y=185), Point(X=395, Y=252)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=87, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=0, Y=0), Point(X=11, Y=0), Point(X=11, Y=67), Point(X=0, Y=65))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=10)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> PublishSubject R2_TS_Leave
#10 -> NestedWorkflow "Mouse In Reward Zone 2"(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI") => #22
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions
        ArrayOfPoint
          Point(X=534, Y=186)
          Point(X=498, Y=186)
          Point(X=463, Y=191)
          Point(X=461, Y=249)
          Point(X=480, Y=247)
          Point(X=481, Y=230)
          Point(X=506, Y=234)
          Point(X=518, Y=237)
          Point(X=533, Y=245)
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=56, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity
      Regions
        ArrayOfPoint
          Point(X=3, Y=31)
          Point(X=3, Y=7)
          Point(X=41, Y=2)
          Point(X=73, Y=2)
          Point(X=72, Y=27)
          Point(X=72, Y=56)
          Point(X=64, Y=51)
          Point(X=48, Y=47)
          Point(X=33, Y=44)
          Point(X=19, Y=43)
          Point(X=18, Y=59)
          Point(X=11, Y=56)
          Point(X=1, Y=61)
      Operation=Avg
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=8)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> PublishSubject Accept2
#22 -> Condition Quit?
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> PublishSubject QuitOffer2
#10 -> NestedWorkflow "Mouse in Hall 3"(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI") => #26
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=352, Y=249), Point(X=351, Y=187), Point(X=391, Y=187), Point(X=392, Y=256)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=79, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=3, Y=29), Point(X=0, Y=0), Point(X=40, Y=0), Point(X=40, Y=35), Point(X=41, Y=69), Point(X=3, Y=61))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=5)
    -> DistinctUntilChanged
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> Bonsai.Scripting.ExpressionTransform => #27
  Expression: 1
#7, #9 -> SkipUntil => #28
-> NestedWorkflow "Mouse in Offer Zone 3"(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI") => #29
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions
        ArrayOfPoint
          Point(X=336, Y=219)
          Point(X=330, Y=102)
          Point(X=393, Y=102)
          Point(X=388, Y=156)
          Point(X=398, Y=162)
          Point(X=399, Y=180)
          Point(X=411, Y=190)
          Point(X=474, Y=187)
          Point(X=591, Y=190)
          Point(X=591, Y=252)
          Point(X=402, Y=218)
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=65, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity
      Regions
        ArrayOfPoint
          Point(X=1, Y=1)
          Point(X=63, Y=0)
          Point(X=61, Y=16)
          Point(X=58, Y=43)
          Point(X=57, Y=55)
          Point(X=68, Y=60)
          Point(X=70, Y=79)
          Point(X=80, Y=89)
          Point(X=133, Y=86)
          Point(X=261, Y=89)
          Point(X=261, Y=150)
          Point(X=75, Y=117)
          Point(X=6, Y=117)
      Operation=Avg
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=10)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> Condition => #30
    WorkflowInput Source1
    -> WorkflowOutput
-> Bonsai.Scripting.ExpressionTransform => #31
  Expression: 2
#27, #31 -> Merge => #32
-> Skip(Count=1) => #33
Source2=#33, Source3=#32 -> Zip
-> NestedWorkflow CheckSequence
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1)
    -> Equal(Operand=IntProperty(Value=2)) => #2
    #0 -> MemberSelector(Selector=Item2)
    -> Equal(Operand=IntProperty(Value=1)) => #4
    #2, #4 -> CombineLatest
    -> LogicalAnd
    -> WorkflowOutput
-> PublishSubject Entry3
#26 -> PublishSubject EntryHall3
#10 -> Bonsai.Vision.VideoWriter
  FileName=rr_video\R2_cam_.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=100, Height=100)
  ResizeInterpolation=NearestNeighbor
#30 -> PublishSubject Directional3
#29 -> PublishSubject OfferState3
#28 -> NestedWorkflow R3_TS_Leave(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI")
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=337, Y=249), Point(X=335, Y=229), Point(X=411, Y=228), Point(X=408, Y=247)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=84, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=0, Y=1), Point(X=38, Y=0), Point(X=76, Y=0), Point(X=73, Y=20), Point(X=2, Y=21))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=10)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> PublishSubject R3_TS_Leave
#28 -> NestedWorkflow R3_TS_Accept(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI")
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=334, Y=185), Point(X=334, Y=169), Point(X=404, Y=170), Point(X=407, Y=185)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=87, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=0, Y=0), Point(X=65, Y=1), Point(X=73, Y=16), Point(X=0, Y=16))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=10)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> PublishSubject R3_TS_Accept
#28 -> NestedWorkflow R3_TS_Entry(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI")
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=402, Y=223), Point(X=400, Y=184), Point(X=409, Y=186), Point(X=414, Y=224)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=135, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=0, Y=1), Point(X=10, Y=2), Point(X=14, Y=40), Point(X=2, Y=40))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=10)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> PublishSubject R3_TS_Entry
#28 -> NestedWorkflow "Mouse in Reward Zone 3"(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI") => #47
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions
        ArrayOfPoint
          Point(X=337, Y=108)
          Point(X=406, Y=108)
          Point(X=397, Y=122)
          Point(X=399, Y=153)
          Point(X=407, Y=153)
          Point(X=408, Y=165)
          Point(X=408, Y=180)
          Point(X=373, Y=180)
          Point(X=340, Y=181)
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=58, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=5, Y=66), Point(X=0, Y=0), Point(X=58, Y=1), Point(X=58, Y=49), Point(X=69, Y=66))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=6)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> PublishSubject Accept3
#47 -> Condition Quit?
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> PublishSubject QuitOffer3
#28 -> NestedWorkflow "Mouse in Hall 4"(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI") => #51
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=337, Y=264), Point(X=337, Y=230), Point(X=410, Y=229), Point(X=406, Y=264)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=89, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=0, Y=1), Point(X=36, Y=1), Point(X=37, Y=0), Point(X=73, Y=0), Point(X=69, Y=35), Point(X=0, Y=35))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=15)
    -> DistinctUntilChanged
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> Bonsai.Scripting.ExpressionTransform => #52
  Expression: 1
#8, #9 -> SkipUntil => #53
-> NestedWorkflow "Mouse Offer Zone 4"(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI") => #54
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions
        ArrayOfPoint
          Point(X=217, Y=311)
          Point(X=216, Y=239)
          Point(X=235, Y=253)
          Point(X=298, Y=249)
          Point(X=302, Y=237)
          Point(X=335, Y=237)
          Point(X=337, Y=162)
          Point(X=334, Y=50)
          Point(X=411, Y=50)
          Point(X=375, Y=242)
          Point(X=377, Y=313)
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=59, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity
      Regions
        ArrayOfPoint
          Point(X=2, Y=201)
          Point(X=72, Y=203)
          Point(X=101, Y=189)
          Point(X=120, Y=188)
          Point(X=121, Y=123)
          Point(X=117, Y=0)
          Point(X=195, Y=0)
          Point(X=159, Y=194)
          Point(X=161, Y=226)
          Point(X=162, Y=263)
          Point(X=92, Y=262)
          Point(X=0, Y=263)
      Operation=Avg
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=9)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> Condition => #55
    WorkflowInput Source1
    -> WorkflowOutput
-> Bonsai.Scripting.ExpressionTransform => #56
  Expression: 2
#52, #56 -> Merge => #57
-> Skip(Count=1) => #58
Source2=#58, Source3=#57 -> Zip
-> NestedWorkflow CheckSequence
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1)
    -> Equal(Operand=IntProperty(Value=2)) => #2
    #0 -> MemberSelector(Selector=Item2)
    -> Equal(Operand=IntProperty(Value=1)) => #4
    #2, #4 -> CombineLatest
    -> LogicalAnd
    -> WorkflowOutput
-> PublishSubject Entry4
#51 -> PublishSubject EntryHall4
#28 -> Bonsai.Vision.VideoWriter
  FileName=rr_video\R3_cam_.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=100, Height=100)
  ResizeInterpolation=NearestNeighbor
#55 -> PublishSubject Directional4
#54 -> PublishSubject OfferState4
#53 -> NestedWorkflow R4_TS_Leave(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI")
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=378, Y=313), Point(X=377, Y=235), Point(X=391, Y=238), Point(X=393, Y=313)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=92, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=1, Y=78), Point(X=0, Y=0), Point(X=14, Y=0), Point(X=16, Y=78))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=10)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> PublishSubject R4_TS_Leave
#53 -> NestedWorkflow R4_TS_Entry(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI")
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=375, Y=247), Point(X=334, Y=246), Point(X=335, Y=233), Point(X=375, Y=234)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=98, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=1, Y=0), Point(X=21, Y=0), Point(X=41, Y=1), Point(X=41, Y=14), Point(X=21, Y=14), Point(X=1, Y=14))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=10)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> PublishSubject R4_TS_Entry
#53 -> NestedWorkflow R4_TS_Accept(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI")
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=312, Y=312), Point(X=308, Y=238), Point(X=322, Y=237), Point(X=326, Y=312)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=92, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=2, Y=47), Point(X=0, Y=0), Point(X=14, Y=1), Point(X=18, Y=75), Point(X=4, Y=75))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=10)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> PublishSubject R4_TS_Accept
#53 -> NestedWorkflow "Mouse in Reward Zone 4"(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI") => #72
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=220, Y=311), Point(X=217, Y=244), Point(X=236, Y=253), Point(X=293, Y=251), Point(X=309, Y=238), Point(X=314, Y=312)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=53, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity
      Regions
        ArrayOfPoint(Point(X=1, Y=18), Point(X=1, Y=6), Point(X=20, Y=17), Point(X=47, Y=15), Point(X=77, Y=14), Point(X=93, Y=0), Point(X=97, Y=74), Point(X=4, Y=74))
      Operation=Avg
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=9)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> PublishSubject Accept4
#72 -> Condition Quit?
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> PublishSubject QuitOffer4
#53 -> NestedWorkflow "Mouse in Hall 1"(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI") => #76
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=384, Y=313), Point(X=382, Y=242), Point(X=436, Y=252), Point(X=439, Y=313)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=98, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=2, Y=71), Point(X=1, Y=32), Point(X=0, Y=11), Point(X=0, Y=1), Point(X=53, Y=10), Point(X=57, Y=71))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=8)
    -> DistinctUntilChanged
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> Bonsai.Scripting.ExpressionTransform => #77
  Expression: 1
#76 -> PublishSubject EntryHall1
#53 -> Bonsai.Vision.VideoWriter
  FileName=rr_video\R4_cam_.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=100, Height=100)
  ResizeInterpolation=NearestNeighbor
#5, #9 -> SkipUntil => #80
-> NestedWorkflow "Mouse in Offer Zone 1"(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI") => #81
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions
        ArrayOfPoint
          Point(X=379, Y=355)
          Point(X=381, Y=304)
          Point(X=371, Y=304)
          Point(X=368, Y=272)
          Point(X=190, Y=270)
          Point(X=190, Y=212)
          Point(X=360, Y=241)
          Point(X=439, Y=245)
          Point(X=441, Y=282)
          Point(X=444, Y=352)
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=62, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity
      Regions
        ArrayOfPoint
          Point(X=0, Y=0)
          Point(X=178, Y=30)
          Point(X=249, Y=34)
          Point(X=254, Y=140)
          Point(X=191, Y=143)
          Point(X=193, Y=93)
          Point(X=181, Y=91)
          Point(X=178, Y=61)
          Point(X=120, Y=59)
          Point(X=0, Y=58)
      Operation=Avg
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=6)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> Condition => #82
    WorkflowInput Source1
    -> WorkflowOutput
-> Bonsai.Scripting.ExpressionTransform => #83
  Expression: 2
#77, #83 -> Merge => #84
-> Skip(Count=1) => #85
#85, #84 -> Zip
-> NestedWorkflow CheckSequence
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1)
    -> Equal(Operand=IntProperty(Value=2)) => #2
    #0 -> MemberSelector(Selector=Item2)
    -> Equal(Operand=IntProperty(Value=1)) => #4
    #2, #4 -> CombineLatest
    -> LogicalAnd
    -> WorkflowOutput
-> PublishSubject Entry1
#82 -> PublishSubject Directional1
#81 -> PublishSubject OfferState1
#80 -> NestedWorkflow R1_TS_Leave(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI")
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=363, Y=232), Point(X=364, Y=218), Point(X=436, Y=218), Point(X=436, Y=232)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=92, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=2, Y=0), Point(X=73, Y=0), Point(X=73, Y=14), Point(X=0, Y=14))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=10)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> PublishSubject R1_TS_Leave
#80 -> NestedWorkflow R1_TS_Accept(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI")
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=367, Y=282), Point(X=366, Y=269), Point(X=438, Y=269), Point(X=439, Y=282)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=84, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=2, Y=0), Point(X=73, Y=0), Point(X=73, Y=13), Point(X=3, Y=13))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=10)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> PublishSubject R1_TS_Accept
#80 -> NestedWorkflow R1_TS_Entry(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI")
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=365, Y=270), Point(X=360, Y=235), Point(X=366, Y=233), Point(X=373, Y=269)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=99, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity
      Regions
        ArrayOfPoint
          Point(X=6, Y=0)
          Point(X=7, Y=4)
          Point(X=13, Y=36)
          Point(X=9, Y=37)
          Point(X=6, Y=37)
          Point(X=4, Y=33)
          Point(X=4, Y=27)
          Point(X=3, Y=26)
          Point(X=0, Y=3)
      Operation=Avg
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=10)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> PublishSubject R1_TS_Entry
#80 -> NestedWorkflow "Mouse in Reward Zone 1"(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI") => #97
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions
        ArrayOfPoint(Point(X=383, Y=303), Point(X=371, Y=301), Point(X=373, Y=282), Point(X=403, Y=282), Point(X=441, Y=282), Point(X=442, Y=350), Point(X=382, Y=353))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=65, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=13, Y=15), Point(X=1, Y=12), Point(X=0, Y=2), Point(X=71, Y=2), Point(X=71, Y=62), Point(X=11, Y=65))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=8)
    -> DistinctUntilChanged
    -> WorkflowOutput
-> PublishSubject Accept1
#97 -> Condition Quit?
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> PublishSubject QuitOffer1
#80 -> Bonsai.Vision.VideoWriter
  FileName=rr_video\R1_cam_.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=true
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=100, Height=100)
  ResizeInterpolation=NearestNeighbor
#80 -> NestedWorkflow "Mouse in Hall 2"(Description="Crops ROI, applies threshold and creates centroid, then determines if centroid is in ROI") => #102
    WorkflowInput Source1
    -> Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=376, Y=184), Point(X=437, Y=184), Point(X=439, Y=231), Point(X=366, Y=231)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=80, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=12, Y=1), Point(X=71, Y=1), Point(X=73, Y=47), Point(X=0, Y=47))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=nil, Threshold=5)
    -> DistinctUntilChanged
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> Bonsai.Scripting.ExpressionTransform => #103
  Expression: 1
#103, #13 -> Merge => #104
-> Skip(Count=1) => #105
Source2=#105, Source3=#104 -> Zip
-> NestedWorkflow CheckSequence
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1)
    -> Equal(Operand=IntProperty(Value=2)) => #2
    #0 -> MemberSelector(Selector=Item2)
    -> Equal(Operand=IntProperty(Value=1)) => #4
    #2, #4 -> CombineLatest
    -> LogicalAnd
    -> WorkflowOutput
-> PublishSubject Entry2
#102 -> PublishSubject EntryHall2

NestedWorkflow "START reset"(Description="Ensures that the pellet dispenser for the first entry is active\n") => #110
    Bonsai.Windows.Input.KeyDown(Filter=D4, SuppressRepetitions=true)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: 4
    -> Take(Count=1)
    -> WorkflowOutput
SubscribeSubject Entry2 => #111
-> DistinctUntilChanged
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> Bonsai.Scripting.ExpressionTransform => #114
  Expression: 2
SubscribeSubject Entry1 => #115
-> DistinctUntilChanged
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> Bonsai.Scripting.ExpressionTransform => #118
  Expression: 1
SubscribeSubject Entry3 => #119
-> DistinctUntilChanged
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> Bonsai.Scripting.ExpressionTransform => #122
  Expression: 3
SubscribeSubject Entry4 => #123
-> DistinctUntilChanged
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> Bonsai.Scripting.ExpressionTransform => #126
  Expression: 4
#114, #118, #122, #126, #110 -> Merge
-> SkipLast(Count=1) => #128
-> Equal(Operand=IntProperty(Value=1)) => #129
#129, #111 -> CombineLatest
-> LogicalAnd => #131
#128 -> Equal(Operand=IntProperty(Value=4)) => #132
#132, #115 -> CombineLatest
-> LogicalAnd => #134
#128 -> Equal(Operand=IntProperty(Value=2)) => #135
#135, #119 -> CombineLatest
-> LogicalAnd => #137
#128 -> Equal(Operand=IntProperty(Value=3)) => #138
#138, #123 -> CombineLatest
-> LogicalAnd => #140
SubscribeSubject Directional1
-> Bonsai.Scripting.ExpressionTransform => #142
  Expression: 1
SubscribeSubject Directional2
-> Bonsai.Scripting.ExpressionTransform => #144
  Expression: 2
SubscribeSubject Directional3
-> Bonsai.Scripting.ExpressionTransform => #146
  Expression: 3
SubscribeSubject Directional4
-> Bonsai.Scripting.ExpressionTransform => #148
  Expression: 4
#142, #144, #146, #148, #110 -> Merge
-> SkipLast(Count=1) => #150
-> Equal(Operand=IntProperty(Value=4)) => #151
#134, #151 -> CombineLatest
-> LogicalAnd => #153
SubscribeSubject OfferState1 => #154
#153, #154 -> CombineLatest
-> LogicalAnd
-> DistinctUntilChanged
-> PublishSubject RestaurantSeq1
#150 -> Equal(Operand=IntProperty(Value=1)) => #159
#131, #159 -> CombineLatest
-> LogicalAnd => #161
SubscribeSubject OfferState2 => #162
#161, #162 -> CombineLatest
-> LogicalAnd
-> DistinctUntilChanged
-> PublishSubject RestaurantSeq2
#150 -> Equal(Operand=IntProperty(Value=2)) => #167
#137, #167 -> CombineLatest
-> LogicalAnd => #169
SubscribeSubject OfferState3 => #170
#169, #170 -> CombineLatest
-> LogicalAnd
-> DistinctUntilChanged
-> PublishSubject RestaurantSeq3
#150 -> Equal(Operand=IntProperty(Value=3)) => #175
#140, #175 -> CombineLatest
-> LogicalAnd => #177
SubscribeSubject OfferState4 => #178
#177, #178 -> CombineLatest
-> LogicalAnd
-> DistinctUntilChanged
-> PublishSubject RestaurantSeq4

SubscribeSubject RestaurantSeq1
-> Bonsai.Scripting.PythonTransform => #184
  Script:
    #import time

    @returns(int)
    def process(value):
    #  time.sleep(0.03)
      if value == True:
        return 1
      else:
        return -1
SubscribeSubject RestaurantSeq2
-> Bonsai.Scripting.PythonTransform => #186
  Script:
    #import time

    @returns(int)
    def process(value):
    #  time.sleep(0.03)
      if value == True:
        return 2
      else:
        return -1
SubscribeSubject RestaurantSeq3
-> Bonsai.Scripting.PythonTransform => #188
  Script:
    #import time

    @returns(int)
    def process(value):
    # time.sleep(0.03)
      if value == True:
        return 3
      else:
        return -1
SubscribeSubject RestaurantSeq4
-> Bonsai.Scripting.PythonTransform => #190
  Script:
    #import time

    @returns(int)
    def process(value):
    #  time.sleep(0.03)
      if value == True:
        return 0
      else:
        return -1
#184, #186, #188, #190 -> Merge
-> Bonsai.Scripting.PythonTransform => #192
  Script:
    counter = 1

    @returns(int)
    def process(value):
      global counter
      if value == counter % 4:
        counter = counter + 1
        return value
      else:
        return -1
-> Equal(Operand=IntProperty(Value=1)) => #193
-> PublishSubject EnterRestaurant1
#193 -> Condition Reject?
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> PublishSubject RejectOffer1
#193 -> Condition CreateOffer
    WorkflowInput Source1
    -> WorkflowOutput
-> Bonsai.Scripting.PythonTransform "Select Probability"
  Script:
    import random

    @returns(float)
    def process(value):
      if value:
        return random.choice([0, 0, 1, 1, 1])
-> PublishSubject Probability1
#192 -> Equal(Operand=IntProperty(Value=2)) => #200
-> PublishSubject EnterRestaurant2
#200 -> Condition Reject?
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> PublishSubject RejectOffer2
#200 -> Condition CreateOffer
    WorkflowInput Source1
    -> WorkflowOutput
-> Bonsai.Scripting.PythonTransform "Select Probability"
  Script:
    import random

    @returns(float)
    def process(value):
      if value:
        return random.choice([0, 0, 1, 1, 1])
-> PublishSubject Probability2
#192 -> Equal(Operand=IntProperty(Value=3)) => #207
-> PublishSubject EnterRestaurant3
#207 -> Condition Reject?
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> PublishSubject RejectOffer3
#207 -> Condition CreateOffer
    WorkflowInput Source1
    -> WorkflowOutput
-> Bonsai.Scripting.PythonTransform "Select Probability"
  Script:
    import random

    @returns(float)
    def process(value):
      if value:
        return random.choice([0, 0, 1, 1, 1])
-> PublishSubject Probability3
#192 -> Equal(Operand=IntProperty(Value=0)) => #214
-> PublishSubject EnterRestaurant4
#214 -> Condition Reject?
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> PublishSubject RejectOffer4
#214 -> Condition CreateOffer
    WorkflowInput Source1
    -> WorkflowOutput
-> Bonsai.Scripting.PythonTransform "Select Probability"
  Script:
    import random

    @returns(float)
    def process(value):
      if value:
        return random.choice([0, 0, 1, 1, 1])
-> PublishSubject Probability4

SubscribeSubject Probability1
-> Bonsai.Scripting.PythonTransform "Reward Calculation"
  Script:
    import random

    @returns(bool)
    def process(value):
    #  time.sleep(0.03)
      if value == 0.8:
        return random.choice([True, True, True, True, False])
      if value == 0.2:
        return random.choice([True, False, False, False, False])
      if value == 1:
        return True
      if value == 0:
        return False
-> PublishSubject RewardYield1

NestedWorkflow "Track and Cue Decision1" => #224
    SubscribeSubject EnterRestaurant1
    -> SelectMany WaitForDecision => #1
        WorkflowInput Source1 => #0
        SubscribeSubject Probability1 => #1
        #0, #1 -> CombineLatest => #2
        -> Condition "P = 0?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Offer0))
        #2 -> Condition "P = 0.2?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=DoubleProperty(Value=0.2))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Offer0.2))
        #2 -> Condition "P = 0.8?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=DoubleProperty(Value=0.8))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Offer0.8))
        #2 -> Condition "P = 1?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Offer1))

        SubscribeSubject RejectOffer1
        -> First
        -> BooleanProperty(Value=false) => #13
        SubscribeSubject Accept1
        -> First
        -> BooleanProperty(Value=true) => #16
        #13, #16 -> Amb => #17
        SubscribeSubject RewardYield1
        -> First => #19
        #17, #19 -> Zip
        -> WorkflowOutput
    -> Condition Accept
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    -> SelectMany Offer => #3
        WorkflowInput Source1
        -> Delay(DueTime=PT5S) => #1
        -> Condition Paid?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Paid))
        -> IntProperty(Value=1) => #4
        #1 -> Condition Unpaid?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> BitwiseNot
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Unpaid))
        -> IntProperty(Value=1) => #7
        #4, #7 -> Amb => #8
        SubscribeSubject QuitOffer1
        -> IntProperty(Value=0) => #10
        #8, #10 -> Amb
        -> SelectMany StopOfferTone
            WorkflowInput Source1
            -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0))
            -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0.2))
            -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0.8))
            -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer1))
            -> WorkflowOutput
        -> WorkflowOutput
    #1 -> Condition Reject
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany StopOfferTone => #5
        WorkflowInput Source1
        -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0))
        -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0.2))
        -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0.8))
        -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer1))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #6
    #3, #6 -> Merge
    -> WorkflowOutput
    #5 -> IntProperty(Value=76) => #9
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #11
    #11, #9 -> Zip
    -> Bonsai.IO.CsvWriter(FileName=rr_data\TESTING_reject_ts_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, CompatibilityMode=true)
-> Accumulate
SubscribeSubject EnterRestaurant1
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> IntProperty(Value=0) => #228
#228, #224 -> Merge
-> PublishSubject Decision1

SubscribeSubject Probability2
-> Bonsai.Scripting.PythonTransform "Reward Calculation"
  Script:
    import random
    @returns(bool)
    def process(value):
      #time.sleep(0.03)
      if value == 0.8:
        return random.choice([True, True, True, True, False])
      if value == 0.2:
        return random.choice([True, False, False, False, False])
      if value == 1:
        return True
      if value == 0:
        return False
-> PublishSubject RewardYield2

NestedWorkflow "Track and Cue Decision2" => #234
    SubscribeSubject EnterRestaurant2
    -> SelectMany WaitForDecision => #1
        WorkflowInput Source1 => #0
        SubscribeSubject Probability2 => #1
        #0, #1 -> CombineLatest => #2
        -> Condition "P = 0?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Offer0))
        #2 -> Condition "P = 0.2?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=DoubleProperty(Value=0.2))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Offer0.2))
        #2 -> Condition "P = 0.8?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=DoubleProperty(Value=0.8))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Offer0.8))
        #2 -> Condition "P = 1?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Offer1))

        SubscribeSubject RejectOffer2
        -> First
        -> BooleanProperty(Value=false) => #13
        SubscribeSubject Accept2
        -> First
        -> BooleanProperty(Value=true) => #16
        #13, #16 -> Amb => #17
        SubscribeSubject RewardYield2
        -> First => #19
        #17, #19 -> Zip
        -> WorkflowOutput
    -> Condition Accept
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    -> SelectMany Offer => #3
        WorkflowInput Source1
        -> Delay(DueTime=PT5S) => #1
        -> Condition Paid?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Paid))
        -> IntProperty(Value=1) => #4
        #1 -> Condition Unpaid?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> BitwiseNot
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Unpaid))
        -> IntProperty(Value=1) => #7
        #4, #7 -> Amb => #8
        SubscribeSubject QuitOffer2
        -> IntProperty(Value=0) => #10
        #8, #10 -> Amb
        -> SelectMany StopOfferTone
            WorkflowInput Source1
            -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0))
            -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0.2))
            -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0.8))
            -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer1))
            -> WorkflowOutput
        -> WorkflowOutput
    #1 -> Condition Reject
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany StopOfferTone
        WorkflowInput Source1
        -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0))
        -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0.2))
        -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0.8))
        -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer1))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #6
    #3, #6 -> Merge
    -> WorkflowOutput
-> Accumulate
SubscribeSubject EnterRestaurant2
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> IntProperty(Value=0) => #238
#238, #234 -> Merge
-> PublishSubject Decision2

SubscribeSubject Probability3
-> Bonsai.Scripting.PythonTransform "Reward Calculation"
  Script:
    import random

    @returns(bool)
    def process(value):
      #time.sleep(0.03)
      if value == 0.8:
        return random.choice([True, True, True, True, False])
      if value == 0.2:
        return random.choice([True, False, False, False, False])
      if value == 1:
        return True
      if value == 0:
        return False
-> PublishSubject RewardYield3

NestedWorkflow "Track and Cue Decision 3" => #244
    SubscribeSubject EnterRestaurant3
    -> SelectMany WaitForDecision => #1
        WorkflowInput Source1 => #0
        SubscribeSubject Probability3 => #1
        #0, #1 -> CombineLatest => #2
        -> Condition "P = 0?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Offer0))
        #2 -> Condition "P = 0.2?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=DoubleProperty(Value=0.2))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Offer0.2))
        #2 -> Condition "P = 0.8?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=DoubleProperty(Value=0.8))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Offer0.8))
        #2 -> Condition "P = 1?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Offer1))

        SubscribeSubject RejectOffer3
        -> First
        -> BooleanProperty(Value=false) => #13
        SubscribeSubject Accept3
        -> First
        -> BooleanProperty(Value=true) => #16
        #13, #16 -> Amb => #17
        SubscribeSubject RewardYield3
        -> First => #19
        #17, #19 -> Zip
        -> WorkflowOutput
    -> Condition Accept
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    -> SelectMany Offer => #3
        WorkflowInput Source1
        -> Delay(DueTime=PT5S) => #1
        -> Condition Paid?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Paid))
        -> IntProperty(Value=1) => #4
        #1 -> Condition Unpaid?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> BitwiseNot
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Unpaid))
        -> IntProperty(Value=1) => #7
        #4, #7 -> Amb => #8
        SubscribeSubject QuitOffer3
        -> IntProperty(Value=0) => #10
        #8, #10 -> Amb
        -> SelectMany StopOfferTone
            WorkflowInput Source1
            -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0))
            -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0.2))
            -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0.8))
            -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer1))
            -> WorkflowOutput
        -> WorkflowOutput
    #1 -> Condition Reject
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany StopOfferTone
        WorkflowInput Source1
        -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0))
        -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0.2))
        -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0.8))
        -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer1))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #6
    #3, #6 -> Merge
    -> WorkflowOutput
-> Accumulate
SubscribeSubject EnterRestaurant3
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> IntProperty(Value=0) => #248
#248, #244 -> Merge
-> PublishSubject Decision3

SubscribeSubject Probability4
-> Bonsai.Scripting.PythonTransform "Reward Calculation"
  Script:
    import random

    @returns(bool)
    def process(value):
      #time.sleep(0.03)
      if value == 0.8:
        return random.choice([True, True, True, True, False])
      if value == 0.2:
        return random.choice([True, False, False, False, False])
      if value == 1:
        return True
      if value == 0:
        return False
-> PublishSubject RewardYield4

NestedWorkflow "Track and Cue Decision 4" => #254
    SubscribeSubject EnterRestaurant4
    -> SelectMany WaitForDecision => #1
        WorkflowInput Source1 => #0
        SubscribeSubject Probability4 => #1
        #0, #1 -> CombineLatest => #2
        -> Condition "P = 0?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Offer0))
        #2 -> Condition "P = 0.2?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=DoubleProperty(Value=0.2))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Offer0.2))
        #2 -> Condition "P = 0.8?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=DoubleProperty(Value=0.8))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Offer0.8))
        #2 -> Condition "P = 1?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Offer1))

        SubscribeSubject RejectOffer4
        -> First
        -> BooleanProperty(Value=false) => #13
        SubscribeSubject Accept4
        -> First
        -> BooleanProperty(Value=true) => #16
        #13, #16 -> Amb => #17
        SubscribeSubject RewardYield4
        -> First => #19
        #17, #19 -> Zip
        -> WorkflowOutput
    -> Condition Accept
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    -> SelectMany Offer => #3
        WorkflowInput Source1
        -> Delay(DueTime=PT5S) => #1
        -> Condition Paid?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Paid))
        -> IntProperty(Value=1) => #4
        #1 -> Condition Unpaid?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> BitwiseNot
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=Unpaid))
        -> IntProperty(Value=1) => #7
        #4, #7 -> Amb => #8
        SubscribeSubject QuitOffer4
        -> IntProperty(Value=0) => #10
        #8, #10 -> Amb
        -> SelectMany StopOfferTone
            WorkflowInput Source1
            -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0))
            -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0.2))
            -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0.8))
            -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer1))
            -> WorkflowOutput
        -> WorkflowOutput
    #1 -> Condition Reject
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany StopOfferTone
        WorkflowInput Source1
        -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0))
        -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0.2))
        -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer0.8))
        -> Bonsai.Audio.StopSource(DeviceName="Generic Software on Speakers (High Definition Audio Device)", SourceName(string=Offer1))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #6
    #3, #6 -> Merge
    -> WorkflowOutput
-> Accumulate
SubscribeSubject EnterRestaurant4
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> IntProperty(Value=0) => #258
#258, #254 -> Merge
-> PublishSubject Decision4

Bonsai.Arduino.DigitalInput(PortName="Pellet Dispenser", Pin=11)
-> Condition "Filter True" => #262
    WorkflowInput Source1
    -> WorkflowOutput
-> IntProperty(Value=1)
-> Accumulate
-> PublishSubject CountRwdR1
#262 -> Timestamp
-> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #267
#262 -> Bonsai.Scripting.ExpressionTransform => #268
  Expression: 16
#267, #268 -> Zip => #269
Bonsai.Arduino.DigitalInput(PortName="Pellet Dispenser", Pin=9)
-> Condition "Filter True" => #271
    WorkflowInput Source1
    -> WorkflowOutput
-> IntProperty(Value=1)
-> Accumulate
-> PublishSubject CountRwdR2
#271 -> Timestamp
-> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #276
#271 -> Bonsai.Scripting.ExpressionTransform => #277
  Expression: 28
#276, #277 -> Zip => #278
Bonsai.Arduino.DigitalInput(PortName="Pellet Dispenser", Pin=7)
-> Condition "Filter True" => #280
    WorkflowInput Source1
    -> WorkflowOutput
-> IntProperty(Value=1)
-> Accumulate
-> PublishSubject CountRwdR3
#280 -> Timestamp
-> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #285
#280 -> Bonsai.Scripting.ExpressionTransform => #286
  Expression: 40
#285, #286 -> Zip => #287
Bonsai.Arduino.DigitalInput(PortName="Pellet Dispenser", Pin=5)
-> Condition "Filter True" => #289
    WorkflowInput Source1
    -> WorkflowOutput
-> IntProperty(Value=1)
-> Accumulate
-> PublishSubject CountRwdR4
#289 -> Timestamp
-> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #294
#289 -> Bonsai.Scripting.ExpressionTransform => #295
  Expression: 52
#294, #295 -> Zip => #296
#269, #278, #287, #296 -> Merge
-> PublishSubject "Pellet Retrieval Timestamp"

NestedWorkflow "Timestamp & Save Events"
    NestedWorkflow "Restaurant 1 Timestamps" => #0
        NestedWorkflow "Entry into Offer Zone 1 Timestamp" => #0
            SubscribeSubject Entry1
            -> DistinctUntilChanged
            -> Condition "Entry into Hall 1"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=10) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #5, #3 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Accept Restaurant 1 Timestamp" => #1
            SubscribeSubject Accept1
            -> DistinctUntilChanged
            -> Condition "Entry into Reward Zone 1"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=11) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #5, #3 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Quit Restaurant 1 Timestamp" => #2
            SubscribeSubject QuitOffer1
            -> IntProperty(Value=13) => #1
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #3
            #3, #1 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Reject Restaurant 1 Timestamp" => #3
            SubscribeSubject RejectOffer1
            -> DistinctUntilChanged
            -> Condition "Exit from Offer Zone 1"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=12) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #5, #3 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Entry into Hall 1 Timestamp" => #4
            SubscribeSubject EntryHall1
            -> DistinctUntilChanged
            -> Condition "Entry into Hall 1"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=9) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #5, #3 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Restaurant 1 Offer Tones Timestamp" => #5
            SubscribeSubject Probability1 => #0
            -> Condition 0?
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=0))
                -> WorkflowOutput
            -> IntProperty(Value=17) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip => #5
            #0 -> Condition 0.2?
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=0.2))
                -> WorkflowOutput
            -> IntProperty(Value=18) => #7
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #9
            #9, #7 -> Zip => #10
            #0 -> Condition 0.8?
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=0.8))
                -> WorkflowOutput
            -> IntProperty(Value=19) => #12
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #14
            #14, #12 -> Zip => #15
            #0 -> Condition 1?
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=1))
                -> WorkflowOutput
            -> IntProperty(Value=20) => #17
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #19
            #19, #17 -> Zip => #20
            #5, #10, #15, #20 -> Merge
            -> WorkflowOutput
        NestedWorkflow "Restaurant 1 Reward-No-Reward Tone Timestamp" => #6
            SubscribeSubject RewardYield1 => #0
            -> Condition "Reward Tone Played?"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=14) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip => #5
            #0 -> Condition "Reward Omission Tone Played?"
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=15) => #7
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #9
            #9, #7 -> Zip => #10
            #5, #10 -> Merge
            -> WorkflowOutput
        NestedWorkflow "SHARP Entry into R1 T-Junction" => #7
            SubscribeSubject R1_TS_Entry
            -> Condition "Filter True"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=61) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip
            -> WorkflowOutput
        NestedWorkflow "SHARP Accept Restaraunt 1" => #8
            SubscribeSubject R1_TS_Accept
            -> Condition "Filter True"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=62) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip
            -> WorkflowOutput
        NestedWorkflow "SHARP Exit Restaraunt 1" => #9
            SubscribeSubject R1_TS_Leave
            -> Condition "Filter True"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=63) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip
            -> WorkflowOutput
        NestedWorkflow "R1 Reward Omission" => #10
            SubscribeSubject RejectOffer1
            -> First
            -> BooleanProperty(Value=false) => #2
            SubscribeSubject Accept1
            -> First
            -> BooleanProperty(Value=true) => #5
            #2, #5 -> Amb => #6
            SubscribeSubject RewardYield1
            -> First => #8
            #6, #8 -> Zip => #9
            -> Condition Accept
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> WorkflowOutput
            -> Delay(DueTime=PT5S) => #11
            -> Condition Paid? => #12
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> IntProperty(Value=1) => #13
            #12 -> IntProperty(Value=73) => #14
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #16
            #16, #14 -> Zip => #17
            #11 -> Condition Unpaid? => #18
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=1) => #19
            #13, #19 -> Amb => #20
            SubscribeSubject QuitOffer1
            -> IntProperty(Value=0) => #22
            #20, #22 -> Amb
            -> Condition Quit?
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> IntProperty(Value=75) => #25
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #27
            #27, #25 -> Zip => #28
            #18 -> IntProperty(Value=74) => #29
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #31
            #31, #29 -> Zip => #32
            #9 -> Condition Reject
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> IntProperty(Value=76) => #34
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #36
            #36, #34 -> Zip => #37
            #17, #28, #32, #37 -> Merge
            -> WorkflowOutput
        #0, #1, #3, #2, #4, #5, #6, #7, #8, #9, #10 -> Merge
        -> WorkflowOutput
    NestedWorkflow "Servo Timestamps" => #1
        NestedWorkflow "Control Servo/Pellet 1"
            SubscribeSubject RewardYield1 => #0
            SubscribeSubject Decision1 => #1
            #0, #1 -> CombineLatest
            -> Condition "Open Servo"
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item2)
                -> Equal(Operand=IntProperty(Value=1)) => #3
                #1, #3 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> IntProperty(Value=90) => #4
            SubscribeSubject RejectOffer1
            -> IntProperty(Value=0) => #6
            #6, #4 -> Merge
            -> WorkflowOutput
            #6 -> BooleanProperty(Value=true) => #9
            NestedWorkflow "Start with Pellet Loaded" => #10
                BooleanProperty(Value=false)
                -> Take(Count=1)
                -> WorkflowOutput
            #9, #10 -> Merge
            -> Bonsai.Arduino.DigitalOutput(PortName="Pellet Dispenser", Pin=10)
            -> Delay(DueTime=PT2S)
            -> BitwiseNot
            -> Bonsai.Arduino.DigitalOutput(PortName="Pellet Dispenser", Pin=10)
        -> Bonsai.Arduino.ServoOutput(PortName=Servo, Pin=2) => #1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #3
        #1 -> NestedWorkflow "Servo 1 State" => #4
            WorkflowInput Source1 => #0
            -> Equal(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=2) => #3
            #0 -> Equal(Operand=IntProperty(Value=90))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1) => #6
            #6, #3 -> Merge
            -> WorkflowOutput
        #3, #4 -> Zip => #5
        NestedWorkflow "Control Servo/Pellet 2"
            SubscribeSubject RewardYield2 => #0
            SubscribeSubject Decision2 => #1
            #0, #1 -> CombineLatest
            -> Condition "Open Servo"
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item2)
                -> Equal(Operand=IntProperty(Value=1)) => #3
                #1, #3 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> IntProperty(Value=90) => #4
            SubscribeSubject RejectOffer2
            -> IntProperty(Value=0) => #6
            #6, #4 -> Merge
            -> WorkflowOutput
            #6 -> BooleanProperty(Value=true) => #9
            NestedWorkflow "Start with Pellet Loaded" => #10
                BooleanProperty(Value=false)
                -> Take(Count=1)
                -> WorkflowOutput
            #9, #10 -> Merge
            -> Delay(DueTime=PT0.25S)
            -> Bonsai.Arduino.DigitalOutput(PortName="Pellet Dispenser", Pin=8)
            -> Delay(DueTime=PT2S)
            -> BitwiseNot
            -> Bonsai.Arduino.DigitalOutput(PortName="Pellet Dispenser", Pin=8)
        -> Bonsai.Arduino.ServoOutput(PortName=Servo, Pin=4) => #7
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #9
        #7 -> NestedWorkflow "Servo 2 State" => #10
            WorkflowInput Source1 => #0
            -> Equal(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=4) => #3
            #0 -> Equal(Operand=IntProperty(Value=90))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=3) => #6
            #6, #3 -> Merge
            -> WorkflowOutput
        #9, #10 -> Zip => #11
        NestedWorkflow "Control Servo/Pellet 3"
            SubscribeSubject RewardYield3 => #0
            SubscribeSubject Decision3 => #1
            #0, #1 -> CombineLatest
            -> Condition "Open Servo"
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item2)
                -> Equal(Operand=IntProperty(Value=1)) => #3
                #1, #3 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> IntProperty(Value=90) => #4
            SubscribeSubject RejectOffer3
            -> IntProperty(Value=0) => #6
            #6, #4 -> Merge
            -> WorkflowOutput
            #6 -> BooleanProperty(Value=true) => #9
            NestedWorkflow "Start with Pellet Loaded" => #10
                BooleanProperty(Value=false)
                -> Take(Count=1)
                -> WorkflowOutput
            #9, #10 -> Merge
            -> Delay(DueTime=PT0.5S)
            -> Bonsai.Arduino.DigitalOutput(PortName="Pellet Dispenser", Pin=6)
            -> Delay(DueTime=PT2S)
            -> BitwiseNot
            -> Bonsai.Arduino.DigitalOutput(PortName="Pellet Dispenser", Pin=6)
        -> Bonsai.Arduino.ServoOutput(PortName=Servo, Pin=8) => #13
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #15
        #13 -> NestedWorkflow "Servo 3 State" => #16
            WorkflowInput Source1 => #0
            -> Equal(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=6) => #3
            #0 -> Equal(Operand=IntProperty(Value=90))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=5) => #6
            #6, #3 -> Merge
            -> WorkflowOutput
        #15, #16 -> Zip => #17
        NestedWorkflow "Control Servo/Pellet 4"
            SubscribeSubject RewardYield4 => #0
            SubscribeSubject Decision4 => #1
            #0, #1 -> CombineLatest
            -> Condition "Open Servo"
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item2)
                -> Equal(Operand=IntProperty(Value=1)) => #3
                #1, #3 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> IntProperty(Value=90) => #4
            SubscribeSubject RejectOffer4
            -> IntProperty(Value=0) => #6
            #6, #4 -> Merge
            -> WorkflowOutput
            #6 -> BooleanProperty(Value=true) => #9
            NestedWorkflow "Start with Pellet Loaded" => #10
                BooleanProperty(Value=false)
                -> Take(Count=1)
                -> WorkflowOutput
            #9, #10 -> Merge
            -> Delay(DueTime=PT0.75S)
            -> Bonsai.Arduino.DigitalOutput(PortName="Pellet Dispenser", Pin=12)
            -> Delay(DueTime=PT2S)
            -> BitwiseNot
            -> Bonsai.Arduino.DigitalOutput(PortName="Pellet Dispenser", Pin=12)
        -> Bonsai.Arduino.ServoOutput(PortName=Servo, Pin=10) => #19
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #21
        #19 -> NestedWorkflow "Servo 4 State" => #22
            WorkflowInput Source1 => #0
            -> Equal(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=8) => #3
            #0 -> Equal(Operand=IntProperty(Value=90))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=7) => #6
            #6, #3 -> Merge
            -> WorkflowOutput
        #21, #22 -> Zip => #23
        #23, #17, #11, #5 -> Merge
        -> WorkflowOutput
    NestedWorkflow "Restaurant 2 Timestamps" => #2
        NestedWorkflow "Entry into Offer Zone 2 Timestamp" => #0
            SubscribeSubject Entry2
            -> DistinctUntilChanged
            -> Condition "Entry into Hall 2"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=22) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #5, #3 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Accept Restaurant 2 Timestamp" => #1
            SubscribeSubject Accept2
            -> DistinctUntilChanged
            -> Condition "Entry into Reward Zone 2"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=23) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #5, #3 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Quit Restaurant 2 Timestamp" => #2
            SubscribeSubject QuitOffer2
            -> IntProperty(Value=25) => #1
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #3
            #3, #1 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Reject Restaurant 2 Timestamp" => #3
            SubscribeSubject RejectOffer2
            -> DistinctUntilChanged
            -> Condition "Exit from Offer Zone 2"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=24) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #5, #3 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Entry into Hall 2 Timestamp" => #4
            SubscribeSubject EntryHall2
            -> DistinctUntilChanged
            -> Condition "Entry into Hall 2"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=21) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #5, #3 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Restaurant 2 Offer Tones Timestamp" => #5
            SubscribeSubject Probability2 => #0
            -> Condition 0?
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=0))
                -> WorkflowOutput
            -> IntProperty(Value=29) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip => #5
            #0 -> Condition 0.2?
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=0.2))
                -> WorkflowOutput
            -> IntProperty(Value=30) => #7
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #9
            #9, #7 -> Zip => #10
            #0 -> Condition 0.8?
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=0.8))
                -> WorkflowOutput
            -> IntProperty(Value=31) => #12
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #14
            #14, #12 -> Zip => #15
            #0 -> Condition 1?
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=1))
                -> WorkflowOutput
            -> IntProperty(Value=32) => #17
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #19
            #19, #17 -> Zip => #20
            #5, #10, #15, #20 -> Merge
            -> WorkflowOutput
        NestedWorkflow "Restaurant 2 Reward-No-Reward Tone Timestamp" => #6
            SubscribeSubject RewardYield2 => #0
            -> Condition "Reward Tone Played?"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=26) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip => #5
            #0 -> Condition "Reward Omission Tone Played?"
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=27) => #7
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #9
            #9, #7 -> Zip => #10
            #5, #10 -> Merge
            -> WorkflowOutput
        NestedWorkflow "SHARP Entry into R2 T-Junction" => #7
            SubscribeSubject R2_TS_Entry
            -> Condition "Filter True"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=64) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip
            -> WorkflowOutput
        NestedWorkflow "SHARP Accept Restaraunt 2" => #8
            SubscribeSubject R2_TS_Accept
            -> Condition "Filter True"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=65) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip
            -> WorkflowOutput
        NestedWorkflow "SHARP Exit Restaraunt 2" => #9
            SubscribeSubject R2_TS_Leave
            -> Condition "Filter True"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=66) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip
            -> WorkflowOutput
        #0, #1, #3, #2, #4, #5, #6, #7, #8, #9 -> Merge
        -> WorkflowOutput
    NestedWorkflow "Restaurant 3 Timestamps" => #3
        NestedWorkflow "Entry into Offer Zone 3 Timestamp" => #0
            SubscribeSubject Entry3
            -> DistinctUntilChanged
            -> Condition "Entry into Hall 3"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=34) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #5, #3 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Accept Restaurant 3 Timestamp" => #1
            SubscribeSubject Accept3
            -> DistinctUntilChanged
            -> Condition "Entry into Reward Zone 3"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=35) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #5, #3 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Quit Restaurant 3 Timestamp" => #2
            SubscribeSubject QuitOffer3
            -> IntProperty(Value=37) => #1
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #3
            #3, #1 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Reject Restaurant 3 Timestamp" => #3
            SubscribeSubject RejectOffer3
            -> DistinctUntilChanged
            -> Condition "Exit from Offer Zone 3"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=36) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #5, #3 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Entry into Hall 3 Timestamp" => #4
            SubscribeSubject EntryHall3
            -> DistinctUntilChanged
            -> Condition "Entry into Hall 3"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=33) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #5, #3 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Restaurant 3 Offer Tones Timestamp" => #5
            SubscribeSubject Probability3 => #0
            -> Condition 0?
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=0))
                -> WorkflowOutput
            -> IntProperty(Value=41) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip => #5
            #0 -> Condition 0.2?
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=0.2))
                -> WorkflowOutput
            -> IntProperty(Value=42) => #7
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #9
            #9, #7 -> Zip => #10
            #0 -> Condition 0.8?
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=0.8))
                -> WorkflowOutput
            -> IntProperty(Value=43) => #12
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #14
            #14, #12 -> Zip => #15
            #0 -> Condition 1?
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=1))
                -> WorkflowOutput
            -> IntProperty(Value=44) => #17
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #19
            #19, #17 -> Zip => #20
            #5, #10, #15, #20 -> Merge
            -> WorkflowOutput
        NestedWorkflow "Restaurant 3 Reward-No-Reward Tone Timestamp" => #6
            SubscribeSubject RewardYield3 => #0
            -> Condition "Reward Tone Played?"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=38) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip => #5
            #0 -> Condition "Reward Omission Tone Played?"
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=39) => #7
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #9
            #9, #7 -> Zip => #10
            #5, #10 -> Merge
            -> WorkflowOutput
        NestedWorkflow "SHARP Entry into R3 T-Junction" => #7
            SubscribeSubject R3_TS_Entry
            -> Condition "Filter True"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=67) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip
            -> WorkflowOutput
        NestedWorkflow "SHARP Accept Restaraunt 3" => #8
            SubscribeSubject R3_TS_Accept
            -> Condition "Filter True"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=68) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip
            -> WorkflowOutput
        NestedWorkflow "SHARP Exit Restaraunt 3" => #9
            SubscribeSubject R3_TS_Leave
            -> Condition "Filter True"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=69) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip
            -> WorkflowOutput
        #0, #1, #3, #2, #4, #5, #6, #7, #8, #9 -> Merge
        -> WorkflowOutput
    NestedWorkflow "Restaurant 4 Timestamps" => #4
        NestedWorkflow "Entry into Offer Zone 4 Timestamp" => #0
            SubscribeSubject Entry4
            -> DistinctUntilChanged
            -> Condition "Entry into Hall 4"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=46) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #5, #3 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Accept Restaurant 4 Timestamp" => #1
            SubscribeSubject Accept4
            -> DistinctUntilChanged
            -> Condition "Entry into Reward Zone 4"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=47) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #5, #3 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Quit Restaurant 4 Timestamp" => #2
            SubscribeSubject QuitOffer4
            -> IntProperty(Value=49) => #1
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #3
            #3, #1 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Reject Restaurant 4 Timestamp" => #3
            SubscribeSubject RejectOffer4
            -> DistinctUntilChanged
            -> Condition "Exit from Offer Zone 4"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=48) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #5, #3 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Entry into Hall 4 Timestamp" => #4
            SubscribeSubject EntryHall4
            -> DistinctUntilChanged
            -> Condition "Entry into Hall 4"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=45) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #5, #3 -> Zip
            -> WorkflowOutput
        NestedWorkflow "Restaurant 4 Offer Tones Timestamp" => #5
            SubscribeSubject Probability4 => #0
            -> Condition 0?
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=0))
                -> WorkflowOutput
            -> IntProperty(Value=53) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip => #5
            #0 -> Condition 0.2?
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=0.2))
                -> WorkflowOutput
            -> IntProperty(Value=54) => #7
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #9
            #9, #7 -> Zip => #10
            #0 -> Condition 0.8?
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=0.8))
                -> WorkflowOutput
            -> IntProperty(Value=55) => #12
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #14
            #14, #12 -> Zip => #15
            #0 -> Condition 1?
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=1))
                -> WorkflowOutput
            -> IntProperty(Value=56) => #17
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #19
            #19, #17 -> Zip => #20
            #5, #10, #15, #20 -> Merge
            -> WorkflowOutput
        NestedWorkflow "Restaurant 4 Reward-No-Reward Tone Timestamp" => #6
            SubscribeSubject RewardYield4 => #0
            -> Condition "Reward Tone Played?"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=50) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip => #5
            #0 -> Condition "Reward Omission Tone Played?"
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=51) => #7
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #9
            #9, #7 -> Zip => #10
            #5, #10 -> Merge
            -> WorkflowOutput
        NestedWorkflow "SHARP Entry into R4 T-Junction" => #7
            SubscribeSubject R4_TS_Entry
            -> Condition "Filter True"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=70) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip
            -> WorkflowOutput
        NestedWorkflow "SHARP Accept Restaraunt 4" => #8
            SubscribeSubject R4_TS_Accept
            -> Condition "Filter True"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=71) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip
            -> WorkflowOutput
        NestedWorkflow "SHARP Exit Restaraunt 4" => #9
            SubscribeSubject R4_TS_Leave
            -> Condition "Filter True"
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=72) => #2
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #4, #2 -> Zip
            -> WorkflowOutput
        #0, #1, #3, #2, #4, #5, #6, #7, #8, #9 -> Merge
        -> WorkflowOutput
    SubscribeSubject "Pellet Retrieval Timestamp" => #5
    #5, #1, #0, #2, #3, #4 -> Merge
    -> Bonsai.IO.CsvWriter(FileName=rr_data\TESTING_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, CompatibilityMode=true)

Neurophotometrics.FP3001
  Index=0
  Regions(RotatedRect(Center(X=1396.5, Y=863), Size(Width=221, Height=208), Angle=0), RotatedRect(Center(X=465.5, Y=732), Size(Width=211, Height=200), Angle=0))
  TriggerMode=Trigger2
  ExposureTime=15.998
  AutoCrop=true
-> Neurophotometrics.PhotometryWriter
  FileName=rr_data_FP\FP_Day033_epoch-5_ID-A2A18DRV_FP-LH_.csv
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  IncludeRegions=false
  IncludeChart=false
-> Timestamp
-> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
-> Bonsai.IO.CsvWriter(FileName=rr_data_FP\FPTS_Day033_epoch-5_ID-A2A18DRV_FP-LH_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

SubscribeSubject CountRwdR1
SubscribeSubject CountRwdR1
