<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>Servo</ard:Name>
          <ard:PortName>COM4</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>19</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>Pellet Dispenser</ard:Name>
          <ard:PortName>COM3</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>19</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D1</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>90</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Q</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:ServoOutput">
          <ard:PortName>Servo</ard:PortName>
          <ard:Pin>2</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D2</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>90</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>W</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:ServoOutput">
          <ard:PortName>Servo</ard:PortName>
          <ard:Pin>4</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D3</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>90</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>E</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:ServoOutput">
          <ard:PortName>Servo</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D4</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>90</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>R</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:ServoOutput">
          <ard:PortName>Servo</ard:PortName>
          <ard:Pin>10</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Count Rewards R1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalInput">
                <ard:PortName>Pellet Dispenser</ard:PortName>
                <ard:Pin>3</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Filter True</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Count Rewards R2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalInput">
                <ard:PortName>Pellet Dispenser</ard:PortName>
                <ard:Pin>5</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Filter True</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Count Rewards R3</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalInput">
                <ard:PortName>Pellet Dispenser</ard:PortName>
                <ard:Pin>9</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Filter True</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Count Rewards R4</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalInput">
                <ard:PortName>Pellet Dispenser</ard:PortName>
                <ard:Pin>11</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Filter True</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="24" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>